CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Channel": "text", "FileLocation": "text", "Frame": "text", "Sequence": "integer", "Series": "text", "Well": "text", "Wellimage": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:Well(?P<Well>[A-Z][0-9]{2})_ChannelDAPI,CY5_Seq(?P<Sequence>00[0-9]{2})_(?P<Wellnr>[A-Z][0-9]{2})_(?P<Sequencenr>00[0-9]{2})_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "CY5")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['', '']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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:200
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    Retain the averaged image?:No
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    Retain the dilated image?:Yes
    Name the dilated image:IllumBlueDilated
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:EdU
    Name the output image:IllumEdU
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:20
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    Retain the averaged image?:No
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    Retain the dilated image?:Yes
    Name the dilated image:IllumEdUDilated
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:IllumBlueDilated
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Subtract
    Select the input image:IllumEdUDilated
    Name the output image:CorrEdU
    Select the illumination function:IllumEdU
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:CorrDAPI
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:AllCells
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.000001
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:IllumEdUDilated
    Name the primary objects to be identified:EdUPositive
    Typical diameter of objects, in pixel units (Min,Max):5,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3489
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.00001,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:AllCells, EdUPositive
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrEdU
    Name the output image:OrigOverlayEdU
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:AllCells
    Select outline color:yellow
    Select objects to display:EdUPositive

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayEdU
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents\\Universtiteit\\Afstuderen\\Data\\EdU\\Experiment 3 - 6 different conditions with different HDF seeding density\\RUN 1 (DAPI exposure 6ms)\\Data processing\\Overlayed images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents\\Universtiteit\\Afstuderen\\Data\\EdU\\Experiment 3 - 6 different conditions with different HDF seeding density\\RUN 1 (DAPI exposure 6ms)\\Data processing
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:EXP3_
    Overwrite existing files without warning?:Yes
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