CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>.*)_Well(?P<Well>[A-Z][0-9]{2})_ChannelTRITC,DAPI_Seq(?P<Sequence>00[0-9]{2})_XY(?P<Replicate>[0-9]{1})_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does Channel "DAPI")
    Name to assign these images:DNA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "TRITC")
    Name to assign these images:Cellbody
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:30
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Cellbody
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:400
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Select the input image:Cellbody
    Name the output image:Corrcellbody
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cellbody
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:11|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
    Select images to measure:Corrcellbody
    Select objects to measure:Cells, FilteredNuclei, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Cellbody
    Select objects to measure:Cells

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Corrcellbody
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FBD604
    Select objects to display:Cells
    Select outline color:blue
    Select objects to display:FilteredNuclei

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Cellbody
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:jpeg
    Output file location:Elsewhere...|E:\\Studeren\\Afstuderen\\Data\\Conditioned medium experiments\\CMEXP030622 (phenome 28)\\CellProfiler output\\Overlayed images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|E:\\Studeren\\Afstuderen\\Data\\Conditioned medium experiments\\CMEXP030622 (phenome 28)\\CellProfiler output\\Output spreadsheat
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CMEXP030622
    Overwrite existing files without warning?:Yes
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